Journal
Description: New Journal
Version VersionNumber=2.4
Assign Variable
  Loop_Pupa = "N"
WhileLoop Expression=Loop_Pupa="N"
  Select Magnification
    stSetting = "40x"
  Acquire - Start Live
  Show Message and Wait
    nDisplay = 1
    iTimeout = 30
    bUseTimeout = FALSE
    stTitle = "Locate wing"
    stMessage = "Place the pupal case in the FOV and ensure that is appears as a silhouette before clicking 'continue'."
    msgX = 917
    msgY = 68
  Acquire - Stop Live
  Acquire
    imDest = "Untitled"
  Assign Variable
    Image.FilePath = SavePath + FlyID + "PUPA" + ".tif"
  Save
    imSave = m 1 3 9 0 1 -1 -1 8 Untitled
    nParm = 0
  Rename Image
    imRenameImage = m 1 3 9 0 1 -1 -1 8 Untitled
    newImageName = "Pupa"
  Auto Threshold for Dark Objects
    imAuto = m 1 3 9 0 1 -1 -1 10 Open-Close
    nAutoThreshOption = 1
  Integrated Morphometry - Load State
    stLoadFileName = "C:\Users\LASX-Admin\Desktop\Pupal Case Macro\Pupa.IMA"
  Comment: Load the measurements to be taken, log the measurements, write the area to a varaible and log the variable to the database
  Integrated Morphometry - Measure
    imSource = "Pupa"
    nColor = 0
    imMask = m 1 2 9 2 1 -1 -1 8 Untitled
    bMeasureUsingMask = TRUE
  Integrated Morphometry - Log Data
    imSource = m 1 3 9 0 1 -1 -1 8 Untitled
    nDisplay = 1
    nMode = 1
    nParm = 1
    nYParm = 2
  Set Logging Row and Column
    nLogType = 3
    bAbsoluteRowMode = FALSE
    bAbsoluteColMode = TRUE
    nRow = 0
    nCol = 2
    nRowOffset = 0
    nColOffset = 2
    bSetAnchorCol = FALSE
    bRefFromLastPos = TRUE
  Log Variable
    nLogType = 3
    stVariable = "IMAObjectData.Area"
    bOneLine = TRUE
    bLogHeader = FALSE
  PromptUser VariableName=Loop_Pupa, PromptType=YesNo, TitleText=Loop, Constrain=1, PromptText=Is the pupa measured?, DialogXPos=1597, DialogYPos=281, Min=7.11166e-318, Max=7.11166e-318
  Close
    im = "Pupa"
    bSaveIt = FALSE
